begin model
# =====================================================================
# FluBNF SIHRS-RWbeta -- RANDOM-WALK transmission (3 fitted parameters).
# Research variant, killed at its decision gate; see docs/RELEASE-1.0.md.
# Everything except the transmission process is the production
# single-strain model, and SIHRS_pop_min.bngl documents the shared
# invariants.
#
# DISTINGUISHING FEATURE: no seasonal prior at all. eps1 and phi1 are
# PINNED TO 0.0 LITERALS below, so the exp() in beta() is identically 1
# and beta is constant in t; every movement in transmission comes from
# the filter's Liu-West drift on Reff. The beta() line keeps the
# production template's harmonic TEXT only so the diff against
# SIHRS_pop_min.bngl is exactly the parameter block.
#
# Fitted (3): Reff, mult, r. There is no eps1__FREE and no phi1__FREE, so
# a conf declaring the production template's five fitted variables would
# hand PyBNF two variables this model does not define.
#
# Tokens substituted per state at materialization (strict: an unresolved
# token raises rather than reaching the engine):
#   {{POP}} {{S0FRAC}} {{I0FRAC}} {{GAMMA}} {{RHO}} {{GAMMAH}} {{OMEGA}}
# Single-season fits only; multi-season runs need SIHRS_pop.bngl.
#
# Fit the REPORTED WEEKLY ADMISSIONS, never the census H(t): the weekly
# count is the change in H_Cum across the reporting week, not H_weekly()
# sampled at an instant.
# =====================================================================
begin parameters

### -- transmission: scale-free reproduction number, no seasonal forcing -- ###
Reff    Reff__FREE     # BASE reproduction number at the initial susceptible
                       # fraction s0, which here IS also the season-start value
                       # because eps1 is pinned to 0 below. The fitted value is
                       # the season-start level only: the filter then walks Reff
                       # week to week. Fit Reff, never R0.
eps1    0.0            # FIXED at zero: no seasonal forcing (RW-beta variant)
phi1    0.0            # unused when eps1 = 0

### -- progression / removal -- ###
gamma   {{GAMMA}}      # FIXED: 7/3.2 d generation time, Chan 2024 doi:10.1101/2024.08.17.24312064
rho     {{RHO}}        # FIXED: true IHR branching fraction I->H; rules only,
                       # never the observable
mult    mult__FREE     # ascertainment; admissions identify only the PRODUCT
                       # rho*mult, and it is never pinned in this file
gammaH  {{GAMMAH}}     # FIXED: discharge; moves the census only, unidentifiable here
omega   {{OMEGA}}      # FIXED: waning R->S, weakly identified from <3 seasons

### -- observation noise -- ###
r       r__FREE        # negative-binomial dispersion (AMCMC)

### -- derived -- ###
beta0   Reff*gamma/s0
pi      3.141592653589793  # avoid BNGL _pi(): bngsim codegen emits M_PI(), which will not compile

### -- FIXED per-state structural constants (known data, never fitted) -- ###
N       {{POP}}        # state population (absolute people)
s0      {{S0FRAC}}     # initial susceptible fraction; FIXED -- R0*s0 is product-identified
i0      {{I0FRAC}}     # initial infected fraction

end parameters

begin molecule types
S()
I()
H()
R()
Hadm()      # cumulative admissions accumulator (never decays)
counter()   # clock: observable t = weeks
end molecule types

begin seed species
S() N*s0
I() N*i0
H() 0
R() N*(1-s0-i0)
Hadm() 0
counter() 0
end seed species

begin observables
Molecules S     S()
Molecules I     I()
Molecules H     H()        # census -- do NOT fit to an admissions target
Molecules R     R()
Molecules H_Cum Hadm()     # cumulative admissions; the weekly count is this observable's change across the reporting week
Molecules t     counter()
end observables

begin functions

### -- transmission rate. Textually the production template's single -- ###
### -- harmonic, but eps1 = 0 above makes exp() identically 1, so beta -- ###
### -- is CONSTANT in t here and all movement comes from the filter.  -- ###
beta() = beta0*exp( eps1*cos(2*pi*(t-phi1)/52) )

### -- ascertained admission flux into H, an INSTANTANEOUS rate -- ###
# mult is observation-only: ascertainment must never enter the reaction rules.
# Despite the name this is people PER WEEK at an instant, not a weekly total.
# The name binds this output to the .exp column of the same name.
H_weekly() = rho*mult*gamma*I

end functions

begin reaction rules
0 -> counter() 1
# infection, FREQUENCY-DEPENDENT: rate constant beta()/N -> flux beta*S*I/N
S() + I() -> I() + I()   beta()/N
I() -> H()   rho*gamma
I() -> R()   (1-rho)*gamma
H() -> R()   gammaH
R() -> S()   omega
# cumulative-admissions accumulator (counts I->H without consuming I)
I() -> I() + Hadm()   rho*gamma
end reaction rules

end model

begin actions
generate_network({overwrite=>1})
simulate({suffix=>"SIHRS_flu",method=>"ode",t_start=>0,t_end=>48,n_steps=>48,print_functions=>1})
end actions
