begin model
# =====================================================================
# FluBNF SIRS-noH -- H-ABLATION VARIANT of SIHRS_pop_min. Research
# variant. Everything except the missing H compartment is the production
# single-strain model, and SIHRS_pop_min.bngl documents the shared
# invariants; docs/MODEL-PROVENANCE.md carries the design record.
#
# DISTINGUISHING FEATURE: THERE IS NO H COMPARTMENT. Do not read the
# SIHRS description across from SIHRS_pop.bngl. The species are S, I, R,
# Hadm and counter, the conserved pool is S+I+R = N, and all removal goes
# straight to R. Admissions survive as an OBSERVABLE only: Hadm
# accumulates the ascertained I->H flux with no H state for people to
# occupy. The one dynamical consequence is that the rho-fraction of
# removals reaches R, and so begins waning, immediately instead of after
# a 1/gammaH hospital stay.
#
# Tokens substituted per state at materialization (strict: an unresolved
# token raises rather than reaching the engine):
#   {{POP}} {{S0FRAC}} {{I0FRAC}} {{GAMMA}} {{RHO}} {{GAMMAH}} {{OMEGA}}
# {{GAMMAH}} is consumed but INERT here; see the gammaH line below.
# Fitted (5): Reff, eps1, phi1, mult, r.
# Single-season fits only; multi-season runs need SIHRS_pop.bngl, whose
# reseeding term is what keeps CVODE from failing over 230 weeks.
#
# Fit the REPORTED WEEKLY ADMISSIONS: the weekly count is the change in
# H_Cum across the reporting week, not H_weekly() sampled at an instant.
# =====================================================================
begin parameters

### -- transmission: scale-free reproduction number + seasonal forcing -- ###
Reff    Reff__FREE     # BASE reproduction number: harmonic-neutral, at the
                       # initial susceptible fraction s0. NOT the season-start
                       # value and NOT the realised one. Fit Reff, never R0.
eps1    eps1__FREE     # annual-harmonic amplitude
phi1    phi1__FREE     # annual-harmonic phase (week of peak transmissibility)

### -- progression / removal -- ###
gamma   {{GAMMA}}      # FIXED: 7/3.2 d generation time, Chan 2024 doi:10.1101/2024.08.17.24312064
rho     {{RHO}}        # FIXED: true IHR branching fraction I->H; rules only,
                       # never the observable
mult    mult__FREE     # ascertainment; admissions identify only the PRODUCT
                       # rho*mult, and it is never pinned in this file
gammaH  {{GAMMAH}}     # DECLARED BUT INERT IN THIS VARIANT: no H compartment
                       # and no discharge rule, so it appears in no rate law.
                       # Kept only so this file consumes the same token set as
                       # the SIHRS templates.
omega   {{OMEGA}}      # FIXED: waning R->S, weakly identified from <3 seasons.
                       # It bites harder here than in SIHRS; see the header.

### -- observation noise -- ###
r       r__FREE        # negative-binomial dispersion (AMCMC)

### -- derived -- ###
beta0   Reff*gamma/s0
pi      3.141592653589793  # avoid BNGL _pi(): bngsim codegen emits M_PI(), which will not compile

### -- FIXED per-state structural constants (known data, never fitted) -- ###
N       {{POP}}        # state population (absolute people)
s0      {{S0FRAC}}     # initial susceptible fraction; FIXED -- R0*s0 is product-identified
i0      {{I0FRAC}}     # initial infected fraction

end parameters

begin molecule types
S()
I()
R()
Hadm()      # cumulative admissions accumulator (never decays)
counter()   # clock: observable t = weeks
end molecule types

begin seed species
# Absolute counts. R(0) carries the non-susceptible, non-infected remainder,
# so S+I+R = N exactly (there is no H compartment in this variant) and
# pre-existing immunity is representable (s0 < 1).
S() N*s0
I() N*i0
R() N*(1-s0-i0)
Hadm() 0
counter() 0
end seed species

begin observables
Molecules S     S()
Molecules I     I()
Molecules R     R()
Molecules H_Cum Hadm()     # cumulative admissions; the weekly count is this observable's change across the reporting week
Molecules t     counter()
end observables

begin functions

### -- continuous seasonal transmission rate (exp() keeps beta > 0) -- ###
beta() = beta0*exp( eps1*cos(2*pi*(t-phi1)/52) )

### -- ascertained admission flux into H, an INSTANTANEOUS rate -- ###
# mult is observation-only: ascertainment must never enter the reaction rules.
# Despite the name this is people PER WEEK at an instant, not a weekly total.
# The name binds this output to the .exp column of the same name.
H_weekly() = rho*mult*gamma*I

end functions

begin reaction rules
0 -> counter() 1
# infection, FREQUENCY-DEPENDENT: rate constant beta()/N -> flux beta*S*I/N
S() + I() -> I() + I()   beta()/N
# NO H COMPARTMENT: all removal goes straight to R
I() -> R()   gamma
R() -> S()   omega
# cumulative-admissions accumulator (counts I->H without consuming I)
I() -> I() + Hadm()   rho*gamma
end reaction rules

end model

begin actions
generate_network({overwrite=>1})
simulate({suffix=>"SIHRS_flu",method=>"ode",t_start=>0,t_end=>48,n_steps=>48,print_functions=>1})
end actions
